<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index>0</spk:Index>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="LeftVideo" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\harrislab\LuminoseData\testCameraAcqLeft.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.UtcTicks</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>double(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>double(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.LineStatusAll</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>double(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.FrameID</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>double(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>1</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="LeftFrameData" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Users\harrislab\LuminoseData\testCameraAcqLeft.frameData.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index>1</spk:Index>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="RightVideo" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\harrislab\LuminoseData\testCameraAcqRight.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.UtcTicks</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>double(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>double(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.LineStatusAll</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>double(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.FrameID</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>double(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>1</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="RightFrameData" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Users\harrislab\LuminoseData\testCameraAcqRight.frameData.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="5" To="12" Label="Source1" />
      <Edge From="5" To="15" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="18" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="18" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="18" Label="Source3" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source4" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="22" To="26" Label="Source1" />
      <Edge From="23" To="25" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="27" To="31" Label="Source1" />
      <Edge From="27" To="34" Label="Source1" />
      <Edge From="27" To="37" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="40" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="40" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="40" Label="Source3" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source4" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="43" Label="Source1" />
      <Edge From="42" To="43" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>